PsychoPy2experiment version="3.0.0b7"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = face_task
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Routines
  Routine instructions
    TextComponent instruct_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to your experiment!

        You will be asked to complete a facial emotion recognition task.

        Press 'c' to continue...
    KeyboardComponent instruct_key
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trials
    MovieComponent movie
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $vid
      pos = (0, 0.2)
      size = [900,900]
      startVal [time (s)] = 0.0
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    KeyboardComponent movie_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -.9)
      startVal [time (s)] = 0.0
      text = Press 'SPACE BAR' when you recognize the emotion displayed...
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  Routine expression
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Which emotion ws displayed?

        1. Fear
        2. Anger
        3. Happiness
        4. Sadness
        5. Disgust
        6. Surprise
        7. Neutral

        Press a number to continue...
    KeyboardComponent text_key
      allowedKeys = '1','2','3','4','5','6','7'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine end
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Thank you for participating!

        You are now finished.
  Routine instruct2
    TextComponent instruct2_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is a facial emotion recognition task.

        This task will require you to look at a blurry image of a face. The blurry image will slowly come into focus and you will be asked to press a button when you detect which emotion is displayed by the face. The face will disappear when you press the button. You will then be asked to select which emotion was displayed by the face from a list of emotions.

        Press 'c' to continue...
    KeyboardComponent instruct2_key
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruct3
    TextComponent instruct3_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        You are about to begin the task.

        On the following screen, when you detect which emotion is displayed by the face, please press 'SPACE BAR'. Once you press 'SPACE BAR', the face will disappear and you will be asked to select which emotion was displayed.

        To respond, please press the numeric key associated with the correct responses: 1 = Fear, 2 = Anger, 3 = Happy, 4 = Sad, 5 = Disgust, 6 = Surprise, 7 = Neutral

        Press 'SPACE BAR' when you are ready to begin...
    KeyboardComponent instruct3_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine instruct2
  Routine instruct3
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = stim_list.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('vid', 'AngryFemaleWhite.avi')]),
      OrderedDict([('vid', 'AngryFemaleWhite2.avi')]),
      OrderedDict([('vid', 'AngryMaleWhite.avi')]),
      OrderedDict([('vid', 'AngryMaleWhite2.avi')]),
      OrderedDict([('vid', 'DisgustFemaleWhite.avi')]),
      OrderedDict([('vid', 'DisgustFemaleWhite2.avi ')]),
      OrderedDict([('vid', 'DisgustFemaleWhite3.avi')]),
      OrderedDict([('vid', 'DisgustMaleWhite3.avi')]),
      OrderedDict([('vid', 'DisgustMaleWhite5.avi   ')]),
      OrderedDict([('vid', 'DisgustMaleWhite6.avi')]),
      OrderedDict([('vid', 'FearFemaleWhite.avi')]),
      OrderedDict([('vid', 'FearFemaleWhite2.avi    ')]),
      OrderedDict([('vid', 'FearMaleWhite.avi')]),
      OrderedDict([('vid', 'FearMaleWhite2.avi')]),
      OrderedDict([('vid', 'gimp1.avi               ')]),
      OrderedDict([('vid', 'gimp2.avi')]),
      OrderedDict([('vid', 'HappyFemaleWhite.avi')]),
      OrderedDict([('vid', 'HappyFemaleWhite2.avi   ')]),
      OrderedDict([('vid', 'HappyFemaleWhite3.avi')]),
      OrderedDict([('vid', 'HappyMaleWhite.avi')]),
      OrderedDict([('vid', 'HappyMaleWhite2.avi     ')]),
      OrderedDict([('vid', 'HappyMaleWhite3.avi')]),
      OrderedDict([('vid', 'NeutralFemaleWhite.avi')]),
      OrderedDict([('vid', 'NeutralFemaleWhite2.avi ')]),
      OrderedDict([('vid', 'NeutralFemaleWhite3.avi')]),
      OrderedDict([('vid', 'NeutralMaleWhite.avi')]),
      OrderedDict([('vid', 'NeutralMaleWhite2.avi   ')]),
      OrderedDict([('vid', 'NeutralMaleWhite3.avi')]),
      OrderedDict([('vid', 'SadFemaleWhite.avi')]),
      OrderedDict([('vid', 'SadFemaleWhite2.avi     ')]),
      OrderedDict([('vid', 'SadMaleWhite.avi')]),
      OrderedDict([('vid', 'SadMaleWhite2.avi')])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
    Routine trials
    Routine expression
  LoopTerminator trials_loop
  Routine end
